<?xml version="1.0" encoding="UTF-8"?>
<PlusConfiguration version="2.5" PlusRevision="Plus-2.7.0.e4d528e1 - Win32">
  <DataCollection StartupDelaySec="1.0">
    <DeviceSet Name="Data collection" Description="OptiTrack Trio and Telemed ultrasound." />
    <Device Id="TrackerDevice" Type="OptiTrack" ToolReferenceFrame="Tracker" ProjectFile="SkullReference.ttp" AttachToRunningMotive="FALSE" MotiveDataDescriptionsUpdateTimeSec="1.0">
      <DataSources>
        <DataSource Type="Tool" Id="Stylus" />
        <DataSource Type="Tool" Id="Probe" />
        <DataSource Type="Tool" Id="Reference" />
      </DataSources>
      <OutputChannels>
        <OutputChannel Id="TrackerStream">
          <DataSource Type="Tool" Id="Stylus" />
          <DataSource Type="Tool" Id="Probe" />
          <DataSource Type="Tool" Id="Reference" />
        </OutputChannel>
      </OutputChannels>
    </Device>
    <Device Id="VideoDevice" LocalTimeOffsetSec="0.0" Type="TelemedVideo" DepthMm="40">
      <DataSources>
        <DataSource Type="Video" Id="Video" PortUsImageOrientation="UF" />
      </DataSources>
      <OutputChannels>
        <OutputChannel Id="VideoStream" VideoDataSourceId="Video" />
      </OutputChannels>
    </Device>
    <Device Id="TrackedVideoDevice" Type="VirtualMixer">
      <InputChannels>
        <InputChannel Id="TrackerStream" />
        <InputChannel Id="VideoStream" />
      </InputChannels>
      <OutputChannels>
        <OutputChannel Id="TrackedVideoStream" />
      </OutputChannels>
    </Device>
	<Device
      Id="VolumeReconstructorDevice"
      Type="VirtualVolumeReconstructor"
      OutputVolDeviceName="RecVol_Reference">
      <InputChannels>
        <InputChannel Id="TrackedVideoStream" />
      </InputChannels>
      <VolumeReconstruction
        ImageCoordinateFrame="Image" ReferenceCoordinateFrame="Reference"
        Interpolation="LINEAR" Optimization="NONE" CompoundingMode="MEAN" FillHoles="OFF" NumberOfThreads="2"
        ClipRectangleOrigin="0 0" ClipRectangleSize="820 616"
        OutputOrigin="-15 -15 30" OutputExtent="0 300 0 300 0 300" OutputSpacing="0.15 0.15 0.15" />
    </Device>
    <Device Id="CaptureDevice" Type="VirtualCapture" BaseFilename="RecordingTest.mhd" EnableCapturing="FALSE" EnableCompression="FALSE" FrameBufferSize="50">
      <InputChannels>
        <InputChannel Id="TrackedVideoStream" />
      </InputChannels>
    </Device>

    <Device
      Id="WebcamDevice" 
      Type="MmfVideo" 
      FrameSize="640 480"
      VideoFormat="YUY2"
      CaptureDeviceId="0" >
      <DataSources>
        <DataSource Type="Video" Id="Webcam" PortUsImageOrientation="MF"  />
      </DataSources>      
      <OutputChannels>
        <OutputChannel Id="WebcamStream" VideoDataSourceId="Webcam" />
      </OutputChannels>
    </Device>

  </DataCollection>
  <CoordinateDefinitions>
    <Transform From="Image" To="Probe"
	  Matrix="    -0.0703926 0.0113005 0.0347059 20.0407
             	  -0.0178832 -0.0764048 -0.0113937 -112.905
				  0.0318182 -0.0179422 0.0703776 8.00922
				  0 0 0 1 " />
  </CoordinateDefinitions>
  <PlusOpenIGTLinkServer MaxNumberOfIgtlMessagesToSend="1" MaxTimeSpentWithProcessingMs="50" ListeningPort="18944" SendValidTransformsOnly="true" OutputChannelId="TrackedVideoStream">
    <DefaultClientInfo>
      <MessageTypes>
        <Message Type="IMAGE" />
        <Message Type="TRANSFORM" />
      </MessageTypes>
      <TransformNames>
        <Transform Name="StylusToReference" />
        <Transform Name="ImageToReference" />
      </TransformNames>
      <ImageNames>
        <Image Name="Image" EmbeddedTransformToFrame="Image" />
        <Image Name="Image" EmbeddedTransformToFrame="Reference" />
      </ImageNames>
    </DefaultClientInfo>
  </PlusOpenIGTLinkServer>


  <PlusOpenIGTLinkServer 
    MaxNumberOfIgtlMessagesToSend="1" 
    MaxTimeSpentWithProcessingMs="50" 
    ListeningPort="18945" 
    SendValidTransformsOnly="true" 
    OutputChannelId="WebcamStream" > 
    <DefaultClientInfo> 
      <MessageTypes> 
        <Message Type="IMAGE" />
      </MessageTypes>
      <ImageNames>
        <Image Name="Webcam" EmbeddedTransformToFrame="Webcam" />
      </ImageNames>
    </DefaultClientInfo>
  </PlusOpenIGTLinkServer>

</PlusConfiguration>